# WS15 - EEG pilot 1
# Authors: Giovanni Di Liberto, Trinity College Dublin, Ireland
# Date: 20/02/2015
# Description: This pilot experiment consists in a repeated presentation of isolated syllables,
#              randomly picked from a group of 28 syllables. In particular, the syllables are:
#              (m,n,f,v,th,dh,sh,zh,p,b,t,d,k,g) x (aa,eh).
#              The experiment is divided in 2 parts: slow speed presentation (1) and fast speed (2).
#              (1) can be analysed using epoching and average,
#              (2) will probably require techniques that deal with the overlapping of neural responses:
#              for example, assuming that listening to a syllable elicit a scalp response longer than
#              200 ms, two stimuli presented with a pause shorter than 200ms will cause an overlapping
#              in the neural response recorded (the second stimulus is presented before the main neural
#              response of the previous one is concluded.
# Goal: To determine which of the two modalities is best for achieving our goals.
#
# 1 speaker, 28 syllables (14 consonants, 2 vowels), 45 minutes (+ breaks) for each part of the experiment.
# Audio file ~300ms length.
# totalTime = (~0.3 s + betweenSylPause) * 28 syllables * repetitions
# First Experiment
# betweenSylPause = ~0.4 s (jitter +- 50 ms), repetitions = 143 (50 trials with 80 syllables), 46.7 minutes + interTrial brakes ~= 60 minutes
# Second Experiment
# betweenSylPause = ~0.1 s (jitter +- 50 ms), repetitions = 250 (50 trials with 140 syllables), 46.7 minutes + interTrial brakes ~= 60 minutes
#

write_codes = true;
pulse_width = 10;

begin;

picture {
	box { height = 16; width = 2; color = 122,122,122; };
   x = 0; y = 0;
	box { height = 2; width = 16; color = 122,122,122; };
   x = 0; y = 0;
   on_top = true;
} pic_0;

picture {
	bitmap { 
		filename = "crosshair.png"; 
	};
   x = 0; y = 0; on_top = true;
} start_pic;

sound {
	wavefile { 
		filename = ""; 
		preload = false;
	};	
} audio1;

trial {
	picture pic_0;
	code = "Start";
	port_code = 254;
   time = 1000;
} start_trial;

trial {
	
	stimulus_event {
      nothing {};
      code = "TrialNum";
		port_code = 1;
      time = 300;
   };
   
} code_trial;

trial {
	stimulus_event {
		sound audio1;
		code = "Stim";
		port_code = 232;
		time = 1500;
   } event1;
} stim_trial;

trial {
	nothing {};
	code = "Stop";
	port_code = 255;
	time = 1500;
} stop_trial;

picture {
	text { caption = "Type the output file name:"; };
	x = 0; y = 0;
	text { caption = ":"; } textFilename;
	x = 0; y = -100;
} picOutFileName;

picture {
	text { caption = " "; } textContinue;
	x = 0; y = 100;
	text { caption = "Press enter to continue..."; } ;
	x = 0; y = 0;
	text { caption = " "; } textContinueResponse;
	x = 0; y = -100;
} picWaitForKey;
	
# Begin presentation main
begin_pcl;

int stage = 1; # stage 1 or 2 (slow or fast presentation]

# Audio files names
string prefixStim = "s_m102_";
string suffixStim = ".sph.wav";
array<string> audioFiles[] = { "ba","be","da","de","fa","fe","ga","ge","ka","ke","ma","me","na","ne","pa","pe","ta","te","va","ve","xda","xde","xsa","xse","xtxa","xtxe","za","ze" };
# Presentation order (see presentationOrder.m). 4004 and 7000 presentations (28*143, 28*250) respectively, randomly sorted
array<int> presentationOrder1[] = { 3,1,23,12,5,2,1,22,7,11,9,24,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15 };
array<int> presentationOrder2[] = { 2,2,14,26,27,9,14,5,15,22,5,3,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23 };
int nFiles = 28;

int nRepetitionsStage;
int nRepetitions1 = 80; # for each trial # one trial will have 84 presentations
int nRepetitions2 = 140; # for each trial

int pauseStage;
int pause1 = 400; # ms +- jitter
int pause2 = 100; # ms +- jitter

int maxJitter = 50; # ms
int nTrials = 50;

if (stage == 1) then
	pauseStage = pause1;
	nRepetitionsStage = nRepetitions1;
else
	pauseStage = pause2;
	nRepetitionsStage = nRepetitions2;
end;

# Defining output file name
# Wait for response
system_keyboard.set_delimiter('\n');
system_keyboard.set_max_length(64);
string outFilename = " ";
loop until (outFilename!="") && (outFilename!=" ")
begin
	outFilename = system_keyboard.get_input( picOutFileName, textFilename );
end;

# Pre-load wave files
array<sound> sounds[nFiles];

loop int i = 1 until i > nFiles
begin
	string filename = prefixStim + audioFiles[i] + suffixStim;
	sounds[i] = new sound(new wavefile(filename));
	#sounds[i].get_wavefile().set_filename(filename);
	sounds[i].get_wavefile().load();
	i = i + 1;
end;

# For each trial
loop int i = 1 until i > nTrials
begin
	# Visualise trial number
	textContinue.set_caption("Trial number: " + string(i));
	textContinue.redraw( );
	stimulus_event codeTrialStim = code_trial.get_stimulus_event(1);
	codeTrialStim.set_port_code(i);
			
	# Waiting for key-pressed
	system_keyboard.set_delimiter('\n');
	system_keyboard.set_max_length(1000);
	system_keyboard.get_input( picWaitForKey, textContinueResponse );
	
	# Start recording
	start_trial.present();
	
	int currentSoundIdx;
	loop int j = 1 until j > nRepetitionsStage
	begin
		if (stage == 1) then
			currentSoundIdx = presentationOrder1[j];
		else
			currentSoundIdx = presentationOrder2[j];
		end;
		event1.set_stimulus( sounds[currentSoundIdx] );
		event1.set_delta_time(random( pauseStage - maxJitter, pauseStage + maxJitter ));
		event1.set_port_code(100+currentSoundIdx);
		stim_trial.present();
		
		j = j + 1;
	end;
	
	stop_trial.present();
	
	i = i + 1;
end;

